PsychoPy2experiment version="2021.1.4"
Settings
  Experiment info = {'participant':'', 'session':'001'}
  Full-screen window = True
  Monitor = testMonitor
  Screen = 1
  Units = height
  Window size (pixels) = (1024, 768)
  expName = Tutorial_1
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Routines
  Routine trial
    StaticComponent ISI
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.0
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    PolygonComponent fixation
      fillColor = white
      saveStartStop = False
      shape = cross
      size = (0.1, 0.1)
      startVal [time (s)] = 1.0
      stopVal [duration (s)] = 1.0
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    GratingComponent grating
      contrast [set every repeat] = level
      mask = circle
      pos [set every repeat] = $location
      sf = 5
      size = (0.1, 0.1)
      startVal [time (s)] = 2.0
      stopVal [duration (s)] = 0.3
      tex = sin
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    KeyboardComponent key_resp
      allowedKeys = 'left','right'
      correctAns = $corrAns
      forceEndRoutine = True
      startVal [time (s)] = 2.0
      storeCorrect = True
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    CodeComponent code
      Code Type = Auto->JS
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      Begin Experiment:
        if random()>0.5:
            location = (-0.2, 0)
            corrAns = 'left'
        else:
            location = (0.2,0)
            corrAns = 'right'
      Begin Routine:
        if random()>0.5:
            location = (-0.2, 0)
            corrAns = 'left'
        else:
            location = (0.2,0)
            corrAns = 'right'
Flow
  LoopInitiator staircase_loop loopType="MultiStairHandler"
    conditions = [{'label': 'const', 'startVal': 0.05, 'stepSizes': [0.01, 0.01, 0.005, 0.005], 'maxVal': 1, 'minVal': 0}]
    conditionsFile = loop_settings.xlsx
    loopType = interleaved staircases
    nReps = 100
    stairType = simple
    switchMethod = random
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    Routine trial
  LoopTerminator staircase_loop
