PsychoPy2experiment version="2021.1.4"
Settings
  Experiment info = {'participant':'', 'session':'001'}
  Full-screen window = True
  Monitor = testMonitor
  Screen = 1
  Units = height
  Window size (pixels) = (1024, 768)
  expName = Tutorial_4
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Routines
  Routine trial
    PolygonComponent fixation
      fillColor = white
      shape = cross
      size = (10, 10)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.0
      units = pix
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    PolygonComponent line1
      fillColor = white
      ori = 90
      pos = (-150, 60)
      shape = rectangle
      size = (100, 10)
      startVal [time (s)] = 1
      units = pix
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    PolygonComponent line2
      fillColor = white
      ori = 90
      pos = (-50, 60)
      shape = rectangle
      size = (100, 10)
      startVal [time (s)] = 1
      units = pix
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    PolygonComponent line3
      fillColor = white
      ori = 90
      pos = (50, 60)
      shape = rectangle
      size = (100, 10)
      startVal [time (s)] = 1
      units = pix
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    PolygonComponent line4
      fillColor = white
      ori = 90
      pos = (150, 60)
      shape = rectangle
      size = (100, 10)
      startVal [time (s)] = 1
      units = pix
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    PolygonComponent probe
      fillColor = white
      pos [set every repeat] = (pos, 120)
      shape = triangle
      size = (10, 10)
      startVal [time (s)] = 2
      units = pix
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    KeyboardComponent key_resp
      allowedKeys = 'z','x','c','v',
      correctAns = $corr_resp
      forceEndRoutine = True
      startVal [time (s)] = 2
      storeCorrect = True
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Flow
  LoopInitiator Sequential loopType="TrialHandler"
    conditionsFile = conditions.xlsx
    loopType = sequential
    nReps = 12
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    conditions:
      [{'pos': -50, 'corr_resp': 'x'},
      {'pos': 150, 'corr_resp': 'v'},
      {'pos': 50, 'corr_resp': 'c'},
      {'pos': -150, 'corr_resp': 'z'}]
    Routine trial
  LoopTerminator Sequential
  LoopInitiator Random loopType="TrialHandler"
    conditionsFile = conditions.xlsx
    loopType = fullRandom
    nReps = 12
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    conditions:
      [{'pos': -50, 'corr_resp': 'x'},
      {'pos': 150, 'corr_resp': 'v'},
      {'pos': 50, 'corr_resp': 'c'},
      {'pos': -150, 'corr_resp': 'z'}]
    Routine trial
  LoopTerminator Random
