PsychoPy2experiment version="2021.1.4"
Settings
  Experiment info = {'participant':'', 'session':'001'}
  Full-screen window = True
  Monitor = testMonitor
  Screen = 1
  Units = height
  Window size (pixels) = (1024, 768)
  expName = Tutorial_5
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Routines
  Routine trial
    TextComponent text
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 8
      text [set every repeat] = $study_word
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    SliderComponent slider
      forceEndRoutine = True
      granularity = 0
      labels = "Familiar","Unfamiliar"
      letterHeight = 0.05
      pos = (0, -0.3)
      size = (1.0, 0.1)
      startVal [time (s)] = 0.0
      styles = rating
      ticks = (1, 2, 3, 4, 5)
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  Routine test
    TextComponent text_2
      letterHeight = 0.1
      pos = (0, 0.3)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 10
      text [set every repeat] = $test
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    TextboxComponent textbox
      bold = False
      editable = True
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 10
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    TextComponent text_3
      letterHeight = 0.1
      pos = (0,  -0.3)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 10
      text = Click to Submit
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    MouseComponent mouse
      clickable = text_3,
      forceEndRoutineOnPress = valid click
      saveMouseState = final
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 10
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Flow
  LoopInitiator trials loopType="TrialHandler"
    conditionsFile = study_words.xlsx
    loopType = random
    nReps = 1
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    conditions:
      [{'study_word': 'vase'},
      {'study_word': 'tiger'},
      {'study_word': 'book'},
      {'study_word': 'cushion'},
      {'study_word': 'piano'}]
    Routine trial
  LoopTerminator trials
  LoopInitiator trials_2 loopType="TrialHandler"
    conditionsFile = test_words.xlsx
    loopType = random
    nReps = 1
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    conditions:
      [{'test': '_a_e'},
      {'test': 't_g_r'},
      {'test': '_oo_'},
      {'test': 'c_sh_on'},
      {'test': '_ia_o'},
      {'test': 'g_i_ar'},
      {'test': 'c_m_r_'},
      {'test': '_ap_op'},
      {'test': '_o_s_'},
      {'test': 'o_a_n_e'}]
    Routine test
  LoopTerminator trials_2
