PsychoPy2experiment version="2021.1.4"
Settings
  Experiment info = {'participant':'', 'session':'001'}
  Full-screen window = True
  Monitor = testMonitor
  Screen = 1
  Units = height
  Window size (pixels) = (1024, 768)
  expName = Tutorial_7
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Routines
  Routine trial
    PolygonComponent fixation
      fillColor = white
      saveStartStop = False
      shape = cross
      size = (0.2, 0.2)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.0
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    PolygonComponent fixation_2
      fillColor = $colors.Color((-1.0000, 0.0039, -1.0000), space='rgb')
      lineColor = $colors.Color((-1.0000, 0.0039, -1.0000), space='rgb')
      saveStartStop = False
      shape = cross
      size = (0.2, 0.2)
      startVal [time (s)] = 1
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    KeyboardComponent key_resp
      allowedKeys = 'space',
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 1
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  Routine beep
    SoundComponent sound_1
      durationEstim = 0.3
      saveStartStop = False
      sound [set every repeat] = $freq
      startEstim = 0
      startVal [time (s)] = delay
      stopVal [duration (s)] = 0.3
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  Routine response
    TextComponent text
      letterHeight = 0.05
      pos = (0, 0.3)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text = Report the delay between Key pressed and the Beep sound (0-999); Click submit after the value is entered. 
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    TextboxComponent textbox
      bold = False
      editable = True
      letterHeight = 0.05
      saveStartStop = False
      startVal [time (s)] = 0.0
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    ButtonComponent button
      bold = True
      forceEndRoutine = True
      letterHeight = 0.05
      pos = (0, -0.3)
      saveStartStop = False
      size = (0.3, 0.1)
      startVal [time (s)] = 0
      text = Submit
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Flow
  LoopInitiator loop loopType="TrialHandler"
    conditionsFile = conditions.xlsx
    loopType = random
    nReps = 5
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    conditions:
      [{'delay': 0.1, 'freq': 400, 'condition': 'unexp'},
      {'delay': 0.4, 'freq': 400, 'condition': 'unexp'},
      {'delay': 0.7, 'freq': 400, 'condition': 'unexp'},
      {'delay': 0.1, 'freq': 1000, 'condition': 'exp'},
      {'delay': 0.4, 'freq': 1000, 'condition': 'exp'},
      {'delay': 0.7, 'freq': 1000, 'condition': 'exp'},
      {'delay': 0.1, 'freq': 1000, 'condition': 'exp'},
      {'delay': 0.4, 'freq': 1000, 'condition': 'exp'},
      {'delay': 0.7, 'freq': 1000, 'condition': 'exp'},
      {'delay': 0.1, 'freq': 1000, 'condition': 'exp'},
      {'delay': 0.4, 'freq': 1000, 'condition': 'exp'},
      {'delay': 0.7, 'freq': 1000, 'condition': 'exp'}]
    Routine trial
    Routine beep
    Routine response
  LoopTerminator loop
